# Generated by Configurator on Fri Apr 05 17:24:42 PDT 2019

# Reset
Property,Core,Initialize,0

# Devices
Device,COM1,SerialManager,COM1
Device,COM4,SerialManager,COM4
Device,UserDefinedShutter,UserDefinedSerial,UserDefinedShutter
Device,DHub,DemoCamera,DHub
Device,DCam,DemoCamera,DCam

# Pre-init settings for devices
Property,UserDefinedShutter,Close-command,O
Property,UserDefinedShutter,Close-response,Turn off all outputs
Property,UserDefinedShutter,Command mode,ASCII-LF-terminator
Property,UserDefinedShutter,Initialize-command,O
Property,UserDefinedShutter,Initialize-response,Turn off all outputs
Property,UserDefinedShutter,Open-command,Q
Property,UserDefinedShutter,Open-response,Turn on first sequence
Property,UserDefinedShutter,Port,COM4
Property,UserDefinedShutter,QueryState-closed-response,0
Property,UserDefinedShutter,QueryState-command,
Property,UserDefinedShutter,QueryState-open-response,1
Property,UserDefinedShutter,Response detection,Ignore responses
Property,UserDefinedShutter,Shutdown-command,
Property,UserDefinedShutter,Shutdown-response,
Property,DCam,MaximumExposureMs,10000.0000

# Pre-init settings for COM ports
Property,COM1,AnswerTimeout,500.0000
Property,COM1,BaudRate,9600
Property,COM1,DataBits,8
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Fast USB to Serial,Disable
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,9600
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1

# Hub (parent) references
Parent,DCam,DHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,DCam
Property,Core,Shutter,UserDefinedShutter
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

