# Generated by Configurator on Fri Apr 05 17:22:53 PDT 2019

# Reset
Property,Core,Initialize,0

# Devices
Device,COM1,SerialManager,COM1
Device,COM4,SerialManager,COM4
Device,UserDefinedShutter,UserDefinedSerial,UserDefinedShutter
Device,DHub,DemoCamera,DHub
Device,DCam,DemoCamera,DCam
Device,UserDefinedStateDevice,UserDefinedSerial,UserDefinedStateDevice

# Pre-init settings for devices
Property,UserDefinedShutter,Close-command,O
Property,UserDefinedShutter,Close-response,Turn off all outputs
Property,UserDefinedShutter,Command mode,ASCII-LF-terminator
Property,UserDefinedShutter,Initialize-command,O
Property,UserDefinedShutter,Initialize-response,Turn off all outputs
Property,UserDefinedShutter,Open-command,Q
Property,UserDefinedShutter,Open-response,Turn on first sequence
Property,UserDefinedShutter,Port,COM4
Property,UserDefinedShutter,QueryState-closed-response,0
Property,UserDefinedShutter,QueryState-command,
Property,UserDefinedShutter,QueryState-open-response,1
Property,UserDefinedShutter,Response detection,Ignore responses
Property,UserDefinedShutter,Shutdown-command,
Property,UserDefinedShutter,Shutdown-response,
Property,DCam,MaximumExposureMs,10000.0000
Property,UserDefinedStateDevice,Command mode,ASCII-LF-terminator
Property,UserDefinedStateDevice,Initialize-command,
Property,UserDefinedStateDevice,Initialize-response,
Property,UserDefinedStateDevice,Number of positions,4
Property,UserDefinedStateDevice,Port,COM4
Property,UserDefinedStateDevice,Response detection,Ignore responses
Property,UserDefinedStateDevice,Shutdown-command,
Property,UserDefinedStateDevice,Shutdown-response,

# Pre-init settings for COM ports
Property,COM1,AnswerTimeout,500.0000
Property,COM1,BaudRate,9600
Property,COM1,DataBits,8
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Fast USB to Serial,Disable
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,9600
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1

# Hub (parent) references
Parent,DCam,DHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,DCam
Property,Core,Shutter,UserDefinedShutter
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# UserDefinedStateDevice
Label,UserDefinedStateDevice,2,State-2
Label,UserDefinedStateDevice,1,State-1
Label,UserDefinedStateDevice,0,State-0

# Configuration presets
# Group: Channel
# Preset: 3
ConfigGroup,Channel,3,UserDefinedStateDevice,State,3

# Preset: 2
ConfigGroup,Channel,2,UserDefinedStateDevice,State,2

# Preset: 1
ConfigGroup,Channel,1,UserDefinedStateDevice,State,1

# Preset: 0
ConfigGroup,Channel,0,UserDefinedStateDevice,State,0


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,UserDefinedStateDevice,SetPosition-command-0,M B000000
ConfigGroup,System,Startup,UserDefinedStateDevice,SetPosition-command-1,M B000001
ConfigGroup,System,Startup,UserDefinedStateDevice,SetPosition-command-2,M B000010
ConfigGroup,System,Startup,UserDefinedStateDevice,SetPosition-command-3,M B000011



# PixelSize settings

